PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = white
  expName = Lexical_Decision_Task
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Routines
  Routine fix_cross
  Routine Cond_1
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = +
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    TextComponent text_3
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.2
      text = image
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    TextComponent word_stimuli
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0
      text = Word           |        Nonword
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    ImageComponent pics_plz
      image [set every repeat] = $image
      size = (0.25, 0.25)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.2
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    ImageComponent arrow_L
      image = Arrow.png
      ori = 90
      pos = (-0.35, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_R
      image = Arrow.png
      ori = 270
      pos = (0.35, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Is the word a word or nonword?
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  Routine Cond_3
  Routine Cond
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the practice trials.

        Press ‘space’ to continue…
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready_msg
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Get ready


        press ‘space’ to continue
  Routine Practice_msg
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown a fixation cross followed by an image, then a word. You will need to press the left arrow key if the word is an actual word, and the right arrow key if the word is a non-word.

        press 'space' to continue
  Routine practice_trials
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = +
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    ImageComponent image
      image [set every repeat] = $Img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.2
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    TextComponent wordstim_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $Word
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Word           |        Nonword
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    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Is the word a word or a nonword?
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    ImageComponent image_2
      image = arrow.png
      ori = 90
      pos = (-0.35, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = arrow.png
      ori = 270
      pos = (0.35, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = PRACTICE
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  Routine Instructions_and_Break
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Feel free to take a break at this point. You will also be able to take frequent breaks between sets of trials.

        When you are ready, press ‘space’ to begin the next set of trials.
  Routine end_practice_trials
    TextComponent text_13
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the practice trials.

        Press ‘space’ to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent thanks_you
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in this experiment.

        You may now press the ‘Space’ bar to close the experiment.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Practice_msg
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = ldt_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'swit', 'Img': 'goldfish.png', 'corrAns2': 'right'},
      {'Word': 'thubble', 'Img': 'lamb.png', 'corrAns2': 'right'},
      {'Word': 'cump', 'Img': 'kitten.png', 'corrAns2': 'right'},
      {'Word': 'bon', 'Img': 'pug.png', 'corrAns2': 'right'},
      {'Word': 'flotter', 'Img': 'bunny.png', 'corrAns2': 'right'},
      {'Word': 'crish', 'Img': 'goldfish.png', 'corrAns2': 'right'},
      {'Word': 'suitish', 'Img': 'lamb.png', 'corrAns2': 'right'},
      {'Word': 'twetter', 'Img': 'kitten.png', 'corrAns2': 'right'},
      {'Word': 'glockle', 'Img': 'pug.png', 'corrAns2': 'right'},
      {'Word': 'ambish', 'Img': 'bunny.png', 'corrAns2': 'right'},
      {'Word': 'roan', 'Img': 'goldfish.png', 'corrAns2': 'right'},
      {'Word': 'bloot', 'Img': 'lamb.png', 'corrAns2': 'right'},
      {'Word': 'cloakly', 'Img': 'kitten.png', 'corrAns2': 'right'},
      {'Word': 'splitter', 'Img': 'pug.png', 'corrAns2': 'right'},
      {'Word': 'alove', 'Img': 'bunny.png', 'corrAns2': 'right'},
      {'Word': 'boy', 'Img': 'goldfish.png', 'corrAns2': 'left'},
      {'Word': 'house', 'Img': 'lamb.png', 'corrAns2': 'left'},
      {'Word': 'garden', 'Img': 'kitten.png', 'corrAns2': 'left'},
      {'Word': 'train', 'Img': 'pug.png', 'corrAns2': 'left'},
      {'Word': 'drink', 'Img': 'bunny.png', 'corrAns2': 'left'},
      {'Word': 'sandwich', 'Img': 'goldfish.png', 'corrAns2': 'left'},
      {'Word': 'coffee', 'Img': 'lamb.png', 'corrAns2': 'left'},
      {'Word': 'flag', 'Img': 'kitten.png', 'corrAns2': 'left'},
      {'Word': 'tent', 'Img': 'pug.png', 'corrAns2': 'left'},
      {'Word': 'bunting', 'Img': 'bunny.png', 'corrAns2': 'left'}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
    Routine practice_trials
  LoopTerminator practice_loop
  Routine end_practice_trials
  Routine Instructions_and_Break
  LoopInitiator master loopType="TrialHandler"
    conditionsFile = ldt_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'block_condition': 'ldt_cond_1.xlsx', 'ready_msg': 'cond_1'},
      {'block_condition': 'ldt_cond_2.xlsx', 'ready_msg': 'cond_2'},
      {'block_condition': 'ldt_cond_3.xlsx', 'ready_msg': 'cond_3'}]
    Routine Ready_msg
    LoopInitiator loop_1 loopType="TrialHandler"
      conditionsFile = $block_condition
      loopType = random
      nReps = 1
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      Routine Cond_1
    LoopTerminator loop_1
  LoopTerminator master
  Routine Thanks
